CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Cells
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:Cells
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Texture
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    Smoothing scale:5.0
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
RescaleIntensity:[module_num:6|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
    Select the input image:Cells
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Cells
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):18,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.1
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cells
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00FF40
    Select objects to display:IdentifyPrimaryObjects

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Cells
    Select objects to measure:IdentifyPrimaryObjects

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Škola\\Letny semester\\ssbu\\semestralka\\cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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